<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.3.0">
  <Workflow xmlns:q2="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q3="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q5="clr-namespace:Bonsai.joh.Vision;assembly=BonsaiPackage5" xmlns:q4="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting" xmlns:q6="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey" xmlns:q1="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:ImageWriter">
          <q1:Path>\\.\pipe\p1</q1:Path>
          <q1:Suffix>None</q1:Suffix>
          <q1:Overwrite>false</q1:Overwrite>
        </Combinator>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>trackOut</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:DrawArrays">
          <q2:ShaderName>Particles</q2:ShaderName>
          <q2:DrawMode>Points</q2:DrawMode>
          <q2:Usage>DynamicDraw</q2:Usage>
          <q2:VertexAttributes>
            <q2:VertexAttributeMapping>
              <q2:Size>4</q2:Size>
              <q2:Normalized>false</q2:Normalized>
              <q2:Type>Float</q2:Type>
            </q2:VertexAttributeMapping>
          </q2:VertexAttributes>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q3:TextWriter">
          <q3:FileName>E:\00_bonsai_ffmpeg_out\PositionTxt_allROI.txt</q3:FileName>
          <q3:Suffix>Timestamp</q3:Suffix>
          <q3:Buffered>true</q3:Buffered>
          <q3:Overwrite>false</q3:Overwrite>
          <q3:Append>false</q3:Append>
        </Combinator>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>ffmpeg</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="q4:PythonSource">
              <q4:Script>import datetime
@returns(str)
def generate():
  currentTime=datetime.datetime.now()
  yield currentTime.strftime('%Y%m%d%H%M%S')</q4:Script>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>30</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="q4:PythonTransform">
              <q4:Script>import subprocess as sp
import datetime

@returns(bool)
def process(inputs):

  vid_width=str(inputs.Item5)
  vid_height=str(inputs.Item6)
  vid_rate=str(inputs.Item1)
  currentTime=inputs.Item2
  cam_id=str(inputs.Item3)
  codec_q=str(inputs.Item4)

  cmd='c:\\ffmpeg\\bin\\ffmpeg.exe -y -f rawvideo -vcodec rawvideo -s '+vid_width+'x'+vid_height+' -r '+vid_rate+' -pix_fmt gray -i \\\\.\\pipe\\p1 -q:v '+codec_q+' -vcodec mpeg4 -vtag xvid e:\\00_bonsai_ffmpeg_out\\out_id'+cam_id+'_'+vid_rate+'fps'+'_'+currentTime+'.avi'
  sp.Popen(cmd)
  return True</q4:Script>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedPropertyOfInt32IntProperty">
              <MemberName>Value</MemberName>
              <Name>codec q</Name>
              <Value>5</Value>
            </Expression>
            <Expression xsi:type="ExternalizedPropertyOfInt32IntProperty">
              <MemberName>Value</MemberName>
              <Name>cam id</Name>
              <Value>0</Value>
            </Expression>
            <Expression xsi:type="ExternalizedPropertyOfInt32IntProperty">
              <MemberName>Value</MemberName>
              <Name>vid fps</Name>
              <Value>30</Value>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Width</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Height</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Take">
                <Count>1</Count>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source3</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>2</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>13</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>2</To>
              <Label>Source5</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>2</To>
              <Label>Source4</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>10</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>11</From>
              <To>2</To>
              <Label>Source6</Label>
            </Edge>
            <Edge>
              <From>12</From>
              <To>2</To>
              <Label>Source7</Label>
            </Edge>
            <Edge>
              <From>13</From>
              <To>11</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>13</From>
              <To>12</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Concat" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Item3</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="CombineLatest" />
            </Expression>
            <Expression xsi:type="NestedWorkflow">
              <Name>findFish</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="ToList" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q1:LargestBinaryRegion" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q1:BinaryRegionAnalysis" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q1:FindContours">
                      <q1:Mode>External</q1:Mode>
                      <q1:Method>ChainApproxNone</q1:Method>
                      <q1:Offset>
                        <q1:X>0</q1:X>
                        <q1:Y>0</q1:Y>
                      </q1:Offset>
                      <q1:MinArea>5</q1:MinArea>
                      <q1:MaxArea>5000</q1:MaxArea>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q1:Crop">
                      <q1:RegionOfInterest>
                        <q1:X>1372</q1:X>
                        <q1:Y>1372</q1:Y>
                        <q1:Width>634</q1:Width>
                        <q1:Height>634</q1:Height>
                      </q1:RegionOfInterest>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property name="RegionOfInterest" selector="Source.Item2.Item1,Source.Item2.Item2,Source.Item2.Item3,Source.Item2.Item3" />
                    </PropertyMappings>
                    <Selector>Source.Item1</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q5:HeadingFromOrientation" />
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>7</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>1</From>
                    <To>8</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>4</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>5</From>
                    <To>4</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>6</From>
                    <To>5</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>8</From>
                    <To>0</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Item2</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Item4</Selector>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>0</From>
              <To>3</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>7</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>9</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>10</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>3</To>
              <Label>Source3</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>3</To>
              <Label>Source4</Label>
            </Edge>
            <Edge>
              <From>10</From>
              <To>3</To>
              <Label>Source5</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Item2</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Item2</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="CombineLatest" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="CombineLatest" />
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>flyVideo</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:Threshold">
                <q1:ThresholdValue>12</q1:ThresholdValue>
                <q1:MaxValue>255</q1:MaxValue>
                <q1:ThresholdType>Binary</q1:ThresholdType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:Grayscale" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:BackgroundSubtraction">
                <q1:BackgroundFrames>120</q1:BackgroundFrames>
                <q1:AdaptationRate>0.0001</q1:AdaptationRate>
                <q1:ThresholdValue>0</q1:ThresholdValue>
                <q1:ThresholdType>ToZero</q1:ThresholdType>
                <q1:SubtractionMethod>Dark</q1:SubtractionMethod>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Image</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q6:FlyCapture">
                <q6:Index>0</q6:Index>
                <q6:ColorFormat>Bgr</q6:ColorFormat>
                <q6:ColorProcessing>Default</q6:ColorProcessing>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ToList" />
      </Expression>
      <Expression xsi:type="q4:PythonTransform">
        <q4:Name>split_hMat</q4:Name>
        <q4:Script>from System import Array
@returns(Array)
def process(value):
  return Array[float]([float(el) for el in value.split()])</q4:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:UpdateFrame" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Item1</Selector>
      </Expression>
      <Expression xsi:type="q3:CsvReader">
        <q3:FileName>E:\00_bonsai_ffmpeg_out\ROIdef2017-04-27T09_46_10.csv</q3:FileName>
        <q3:ScanPattern>%i %i %i %i %i %i</q3:ScanPattern>
        <q3:SkipRows>0</q3:SkipRows>
      </Expression>
      <Expression xsi:type="q3:CsvReader">
        <q3:FileName>E:\00_bonsai_ffmpeg_out\calibrationOut2017-04-27T09_55_01.csv</q3:FileName>
        <q3:ScanPattern>%s</q3:ScanPattern>
        <q3:SkipRows>0</q3:SkipRows>
      </Expression>
      <Expression xsi:type="q4:PythonTransform">
        <q4:Script>import clr
clr.AddReference("OpenTK")
from OpenTK import Vector2, Vector3,Vector4
from System import Array, Single, Random,Tuple
clr.AddReference("OpenCV.Net")
from OpenCV.Net import *
import math
import traceback
import random

generator = Random()



speed=1 #px/frame

stimDirOff=-math.pi/(180./45) #direction relative to animal heading where dot first appears. Used together with startDist to determine location of dot start.
stimDirOffB=-math.pi/(180./135)
stimDir=math.pi/(180./90) #direction of dot movement away from dot start. Direction is relative to animal heading. pi/2 = perpendicular

startDist=75. # (px) how far away from centroid dot first appears.
endDist = 0. # (px) how far dot approaches

groupSize=1 # number of times to repeat same dot size from sizeList
groupGap=30*10 # (frames) delay before switching to a new size from sizeList
dotGap=30*10 # (frames) delay between dots of the same size

preGap=30*2
postGap=30*2

DotColor = 1.
DotColorB = 0.2

#define variables

groupCount=0 #counter for presentations of same dot size
startSize=0 #initial dot size set to 0
endSize=15
iSize=[0,1.5,2]
pointPathAll=[] #stores dot paths
ar=Array[Vector4]([Vector4(0.,0.,0,DotColor)]) # stores (x,y,size) array for openGL sprite drawing
gapFrames=dotGap # number of frames before next dot. Automatically set to groupGap or dotGap during experiment.
frCount=200#int(endSize+preGap+1) #counter for frames since dot presentation
left=0
front=0
stimList=[]
sAll=[]
# random number generator between min and max
def randomFunc(generator,minval,maxval):
  return int(round(generator.NextDouble() * (maxval - minval) + minval))

# perspective transformation using calibration matrix to match camera and projector coordinates
def transf(x,y,h):

  values1 = Array[float]([x,y])
  values2 = Array[float]([1,1])

  point = Mat.FromArray(values1, 1, 1, Depth.F64,2)
  out = Mat.FromArray(values2, 1, 1, Depth.F64,2)

  CV.PerspectiveTransform(point,out,h)

  x=out.Item[0].Val0
  y=out.Item[0].Val1

  return x,y


@returns(Tuple[Array[Vector4],str,float])
def process(value):
  global frCount,pointPathAll,size,ar,groupCount,stimDir,stimDirOff,gapFrames,DotColor,stimDirOffB,left,front,stimList,sAll

  episode=99
  xMax=value.Item4.Width #2048.0 #relevant for openGL scaling
  yMax=value.Item4.Height #1280.0

  DotPathLength=int(endSize-startSize) # number of frames dot is visible

  hArr =value.Item3 #projector-camera calibration matrix
  h = Mat.FromArray(hArr, 3, 3, Depth.F64, 1)

  cAll=[] #[(x,y)]: list of centroids (one for each tracked animal)
  headingAll=[] # list of animal headings

  #collect animal centroids and headings
  for a in range(value.Item1.Count): #loop over animals
    c=value.Item1[a].Centroid
    heading=value.Item1[a].Orientation
    cAll.append(c)
    headingAll.append(heading)

  try: #big loop to process for each frame

    if frCount==preGap-1: #begin presentation of a new dot

      #pre-calculate dot paths for all animals
      #(dot paths are not updates as the animal moves)

      pointPathAll=[]

      if groupCount==0: #start of a new group: randomly select new dot size from list
        #sizeInd=randomFunc(generator,0,len(sizeList))
        #DotColor=randomFunc(generator,0,10)/10.
        size=10#sizeList[sizeInd]
        if len(stimList)==0:
          stimList=value.Item5
          random.shuffle(stimList,random.random)
          gapFrames=100
        else:
          random.shuffle(stimList,random.random)

      if groupCount&lt;len(stimList):
        gapFrames=dotGap # use dotGap delay before next dot
        
        left=stimList[groupCount].Item3
        sAll=[stimList[groupCount].Item1,stimList[groupCount].Item2]
        groupCount+=1
      else:
        gapFrames=groupGap # use groupGap delay before next dot
        groupCount=0 # reset groupCount
      
      #decide left/right and front/back

      #left=random(generator,0,100)&lt;50
      #front=random(generator,0,100)&lt;50

      # invert direction of stimulus movement and stimulus start location to alternate left and right side
      if left:
        sd=-1*stimDir 
        sdo=-1*stimDirOff
        sdoB=-1*stimDirOffB

      else:
        sd=stimDir 
        sdo=stimDirOff
        sdoB=stimDirOffB

      
      

      for a in range(value.Item1.Count): #loop over animals
      
        #for each arena, test if animal was found and then generate dot path

        c=cAll[a]
        pointPath=[]
        if math.isnan(headingAll[a]): #generate empty path if no animal found
          for i in range(2):
            pointPath.append(Point(0,0))

        else: #actual dot path calculation:

          #find dot start point
          heading=headingAll[a]+sdo #start point direction
          distance=startDist # distance to dot start point
          rise = math.sin(heading)*distance
          run = math.cos(heading)*distance
          x=c.X+run
          y=c.Y+rise
          pointPath.append(Point(x,y))
          heading=headingAll[a]+sdoB
          rise = math.sin(heading)*distance
          run = math.cos(heading)*distance
          x=c.X+run
          y=c.Y+rise
          pointPath.append(Point(x,y))


        pointPathAll.append(pointPath)




    # in each frame, decide if dot should draw



    if frCount &lt; DotPathLength+gapFrames+preGap+postGap: # outer loop for each dot presentation
      
      frCount+=1

      if frCount-(preGap+postGap)&lt;DotPathLength: # still have dot path to show

        if frCount&lt;preGap:
          sizeNow=[0,0]
          episode=0
        elif frCount&gt;DotPathLength+preGap:
          pointPathAll=[]
          for a in range(value.Item1.Count):
            pointPath=[]
            for i in range(2):
              pointPath.append(Point(0,0))
            pointPathAll.append(pointPath)

          sizeNow=[0,0]
          episode=2
        else:
          sizeNow=sAll
          episode=1
        drawAll=[] #list of all dot coordinates
        wellstr=[] #string output of animal and dot data for file output

        for a in range(value.Item1.Count): #loop over animals

          pointPath=pointPathAll[a] #get entire current dot path (this allows to draw multiple dots from same path)
          p=pointPath[0] #get current frame
          xp=p.X #point
          yp=p.Y #point
          p2=pointPath[1]
          xp2=p2.X
          yp2=p2.Y
          c=cAll[a] #get current centroid
          heading=headingAll[a]
          x=c.X #animal
          y=c.Y #animal

          #concatenate animal and dot data into string (data are in arena reference coordinates).

          #if no animal was found, x=NaN --&gt; output NaN for this animal
          if math.isnan(x):
            wellstr.append("NaN NaN NaN NaN NaN NaN NaN")
          else:
            welldata=(x,y,heading,xp,yp,xp2,yp2) 
            wellstr.append("%i %i %0.3f %i %i %i %i" % welldata)
            
            
          #add arena offset to point coordinates for display
          xoff=value.Item2[a].Item1
          yoff=value.Item2[a].Item2
          xx=xp+xoff
          yy=yp+yoff

          if math.isnan(xx):
            xx,yy=0,0
            drawAll.append([xx,yy,0,0])
            drawAll.append([xx,yy,0,0])
          else:
            currSize=[]
            for i in range(2): #can show multiple dots

              p=pointPath[i]
              #r=random(generator,1,5)
              xp=p.X#+r
              yp=p.Y#+r
              xx=xp+xoff
              yy=yp+yoff
              xx,yy=transf(xx,yy,h) ##projector-camera calibration
              #drawAll.append([xx,yy,float((1+i*3)/7.),int(frCount/(i+1))])
              currSize.append(int(iSize[sizeNow[i]]*(frCount-preGap))*speed)
              drawAll.append([xx,yy,1,currSize[i]])

        welldata=(currSize[0],currSize[1],left,episode) 
        wellstr.append("%i %i %i %i" % welldata)
        #build dot array and output string from all animals
        ar=Array[Vector4]([Vector4(2*(xy[0]-xMax/2)/xMax,-2*(xy[1]-yMax/2)/yMax,xy[3],xy[2]) for xy in drawAll])
        st=" ".join(wellstr)

      else: #no drawing array between dot presentations
        ar=Array[Vector4]([Vector4(0.,0.,0,DotColor)])
        st='gap'
    else:
      frCount=0
      ar=Array[Vector4]([Vector4(0.,0.,0,DotColor)])
      st='gap'


  except:

    print traceback.format_exc()
    ar=Array[Vector4]([Vector4(0.,0.,0,DotColor)])
    st='none'

  return Tuple.Create(ar,st,DotColor)

def unload():
  global frCount,pointPathAll, size,ar,groupCount,stimDir,stimDirOff,gapFrames,stimList,sAll
  frCount=None
  pointPathAll=None
  ar=None
  size=None
  groupCount=None
  stimDir=None
  stimDirOff=None
  gapFrames=None
  stimList=None
  sAll=None
</q4:Script>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>trackOut</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="CombineLatest" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ToList" />
      </Expression>
      <Expression xsi:type="q3:CsvReader">
        <q3:FileName>E:\00_bonsai_ffmpeg_out\stimLists\16xCompetition.txt</q3:FileName>
        <q3:ScanPattern>%i %i %i</q3:ScanPattern>
        <q3:SkipRows>0</q3:SkipRows>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>gap</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="CombineLatest" />
      </Expression>
      <Expression xsi:type="Equal" />
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Item1</Selector>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:DrawMesh">
                <q2:ShaderName>Waveform</q2:ShaderName>
                <q2:MeshName>Waveform</q2:MeshName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:UpdateUniform">
                <q2:UniformName>frequency</q2:UniformName>
                <q2:ShaderName>Waveform</q2:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:UpdateVertexBuffer">
                <q2:MeshName>Waveform</q2:MeshName>
                <q2:DrawMode>Points</q2:DrawMode>
                <q2:Usage>DynamicDraw</q2:Usage>
                <q2:VertexAttributes>
                  <q2:VertexAttributeMapping>
                    <q2:Size>2</q2:Size>
                    <q2:Normalized>false</q2:Normalized>
                    <q2:Type>Double</q2:Type>
                  </q2:VertexAttributeMapping>
                </q2:VertexAttributes>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:UpdateUniform">
                <q2:UniformName>phase</q2:UniformName>
                <q2:ShaderName>Waveform</q2:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>20</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Item1</Selector>
            </Expression>
            <Expression xsi:type="q4:ExpressionTransform">
              <q4:Expression>single(it)</q4:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="CombineLatest" />
            </Expression>
            <Expression xsi:type="Accumulate" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Take">
                <Count>5</Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="q4:PythonTransform">
              <q4:Script>import clr
clr.AddReference("OpenTK")
from OpenTK import Vector2, Vector3
from System import Array, Single, Random,Tuple
clr.AddReference("OpenCV.Net")
from OpenCV.Net import *

xMax=2048.0 #relevant for openGL scaling
yMax=xMax

def transf(x,y,hArr):

  h = Mat.FromArray(hArr, 3, 3, Depth.F64, 1)

  values1 = Array[float]([x,y])
  values2 = Array[float]([1,1])

  point = Mat.FromArray(values1, 1, 1, Depth.F64,2)
  out = Mat.FromArray(values2, 1, 1, Depth.F64,2)

  CV.PerspectiveTransform(point,out,h)

  x=out.Item[0].Val0
  y=out.Item[0].Val1

  return x,y

@returns(Mat)
def process(value):
  hArr =value.Item2


  x = [r.Item4 for r in value.Item1]
  y = [r.Item5 for r in value.Item1]
  scale=xMax/31.
  for i in range(len(x)):
    
    
    
    x[i]=x[i]-(scale*(x[i]-xMax/2.)/(75*scale))
    y[i]=y[i]-(scale*(y[i]-yMax/2.)/(75*scale))
    x[i],y[i]=transf(x[i],y[i],hArr)
    x[i]=(2*(x[i]-xMax/2))/xMax
    y[i]=(-2*(y[i]-yMax/2))/yMax

  
  xy=sum(zip(x, y), ()) 

  xyA = Array[float](xy)


  xym = Mat.FromArray(xyA, len(value.Item1), 2, Depth.F64, 1)

  return xym</q4:Script>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Item2.EventArgs.Time</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Item3,Source.Item4</Selector>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="MemberSelector">
                    <Selector>Source.Item1</Selector>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="Multiply" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>16</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>15</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>7</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>10</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>11</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>11</From>
              <To>9</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>12</From>
              <To>10</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>13</From>
              <To>11</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>13</From>
              <To>12</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>14</From>
              <To>13</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>15</From>
              <To>16</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>16</From>
              <To>17</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>17</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>4</From>
        <To>0</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>1</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>3</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>23</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>8</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>9</From>
        <To>6</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>10</From>
        <To>4</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>10</From>
        <To>8</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>11</From>
        <To>19</To>
        <Label>Source3</Label>
      </Edge>
      <Edge>
        <From>11</From>
        <To>8</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>12</From>
        <To>8</To>
        <Label>Source3</Label>
      </Edge>
      <Edge>
        <From>12</From>
        <To>19</To>
        <Label>Source4</Label>
      </Edge>
      <Edge>
        <From>13</From>
        <To>9</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>13</From>
        <To>19</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>14</From>
        <To>9</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>15</From>
        <To>11</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>16</From>
        <To>12</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>17</From>
        <To>14</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>17</From>
        <To>7</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>18</From>
        <To>17</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>19</From>
        <To>25</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>20</From>
        <To>8</To>
        <Label>Source4</Label>
      </Edge>
      <Edge>
        <From>21</From>
        <To>20</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>22</From>
        <To>23</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>23</From>
        <To>24</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>24</From>
        <To>19</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>25</From>
        <To>26</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Vision.ImageWriter, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.DrawArrays, Bonsai.Shaders, Version=0.16.1.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.TextWriter, Bonsai.System, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.PythonSource, Bonsai.Scripting, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.IntProperty, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.PythonTransform, Bonsai.Scripting, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.Int32, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.Expressions.IntProperty, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Take, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Concat, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.CombineLatest, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.ToList, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.LargestBinaryRegion, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.BinaryRegionAnalysis, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.FindContours, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Crop, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.InputMappingBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.joh.Vision.HeadingFromOrientation, BonsaiPackage5, Version=1.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Threshold, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Grayscale, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.BackgroundSubtraction, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.PointGrey.FlyCapture, Bonsai.PointGrey, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.UpdateFrame, Bonsai.Shaders, Version=0.16.1.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.CsvReader, Bonsai.System, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.StringProperty, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.EqualBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.DrawMesh, Bonsai.Shaders, Version=0.16.1.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.UpdateUniform, Bonsai.Shaders, Version=0.16.1.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.UpdateVertexBuffer, Bonsai.Shaders, Version=0.16.1.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.FloatProperty, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.ExpressionTransform, Bonsai.Scripting, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.AccumulateBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.MultiplyBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>